<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:osc="clr-namespace:Bonsai.Osc;assembly=Bonsai.Osc"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>Receiver</osc:Name>
          <osc:Port>30000</osc:Port>
          <osc:RemoteHostName />
          <osc:RemotePort>0</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="osc:CreateUdpClient">
          <osc:Name>Emitter</osc:Name>
          <osc:Port>0</osc:Port>
          <osc:RemoteHostName>localhost</osc:RemoteHostName>
          <osc:RemotePort>20000</osc:RemotePort>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitializeVars</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>Rand1</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Single">
              <rx:Name>Rand2</rx:Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UpdateTrialNumber</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TrialNumber</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>rand1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Rand1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>rand2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Rand2</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="osc:ReceiveMessage">
        <osc:Address>/start</osc:Address>
        <osc:TypeTag>i</osc:TypeTag>
        <osc:Connection>Receiver</osc:Connection>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeLast">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="osc:SendMessage">
        <osc:Connection>Emitter</osc:Connection>
        <osc:Address>/msg</osc:Address>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="13" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>